' CR200/CR200X Series
' Program to log standard data from Implexx Sap Flow Sensors
' Generated by Python Script (cr200x_generator.py)
' Number of Sensors: 4
' Measurement Interval: 30 minutes
' NOTE: This program uses one DataTable per sensor.
' CR200X supports a maximum of 8 DataTables with this strategy.

'--- Declare Variables and Units ---
Dim N_0 ' Loop counter for Sensor 0 error handling
Dim N_1 ' Loop counter for Sensor 1 error handling
Dim N_2 ' Loop counter for Sensor 2 error handling
Dim N_3 ' Loop counter for Sensor 3 error handling
Public BattV
Public id
Public SDIData_Sensor0(9)
Public SensorAddress0
Public SDIData_Sensor1(9)
Public SensorAddress1
Public SDIData_Sensor2(9)
Public SensorAddress2
Public SDIData_Sensor3(9)
Public SensorAddress3

'--- Alias Declarations (Maps array elements to meaningful names) ---
Alias SDIData_Sensor0(1) = SapFlwTot0
Alias SDIData_Sensor0(2) = VhOuter0
Alias SDIData_Sensor0(3) = VhInner0
Alias SDIData_Sensor0(4) = AlphaOut0
Alias SDIData_Sensor0(5) = AlphaIn0
Alias SDIData_Sensor0(6) = BetaOut0
Alias SDIData_Sensor0(7) = BetaIn0
Alias SDIData_Sensor0(8) = tMaxTout0
Alias SDIData_Sensor0(9) = tMaxTin0
Alias SDIData_Sensor1(1) = SapFlwTot1
Alias SDIData_Sensor1(2) = VhOuter1
Alias SDIData_Sensor1(3) = VhInner1
Alias SDIData_Sensor1(4) = AlphaOut1
Alias SDIData_Sensor1(5) = AlphaIn1
Alias SDIData_Sensor1(6) = BetaOut1
Alias SDIData_Sensor1(7) = BetaIn1
Alias SDIData_Sensor1(8) = tMaxTout1
Alias SDIData_Sensor1(9) = tMaxTin1
Alias SDIData_Sensor2(1) = SapFlwTot2
Alias SDIData_Sensor2(2) = VhOuter2
Alias SDIData_Sensor2(3) = VhInner2
Alias SDIData_Sensor2(4) = AlphaOut2
Alias SDIData_Sensor2(5) = AlphaIn2
Alias SDIData_Sensor2(6) = BetaOut2
Alias SDIData_Sensor2(7) = BetaIn2
Alias SDIData_Sensor2(8) = tMaxTout2
Alias SDIData_Sensor2(9) = tMaxTin2
Alias SDIData_Sensor3(1) = SapFlwTot3
Alias SDIData_Sensor3(2) = VhOuter3
Alias SDIData_Sensor3(3) = VhInner3
Alias SDIData_Sensor3(4) = AlphaOut3
Alias SDIData_Sensor3(5) = AlphaIn3
Alias SDIData_Sensor3(6) = BetaOut3
Alias SDIData_Sensor3(7) = BetaIn3
Alias SDIData_Sensor3(8) = tMaxTout3
Alias SDIData_Sensor3(9) = tMaxTin3

'--- Units Declarations ---
Units BattV=Volts
Units SapFlwTot0=literPerHour
Units VhOuter0=heatVelocity
Units VhInner0=heatVelocity
Units AlphaOut0=logTRatio
Units AlphaIn0=logTRatio
Units BetaOut0=logTRatio
Units BetaIn0=logTRatio
Units tMaxTout0=second
Units tMaxTin0=second
Units SapFlwTot1=literPerHour
Units VhOuter1=heatVelocity
Units VhInner1=heatVelocity
Units AlphaOut1=logTRatio
Units AlphaIn1=logTRatio
Units BetaOut1=logTRatio
Units BetaIn1=logTRatio
Units tMaxTout1=second
Units tMaxTin1=second
Units SapFlwTot2=literPerHour
Units VhOuter2=heatVelocity
Units VhInner2=heatVelocity
Units AlphaOut2=logTRatio
Units AlphaIn2=logTRatio
Units BetaOut2=logTRatio
Units BetaIn2=logTRatio
Units tMaxTout2=second
Units tMaxTin2=second
Units SapFlwTot3=literPerHour
Units VhOuter3=heatVelocity
Units VhInner3=heatVelocity
Units AlphaOut3=logTRatio
Units AlphaIn3=logTRatio
Units BetaOut3=logTRatio
Units BetaIn3=logTRatio
Units tMaxTout3=second
Units tMaxTin3=second

'--- Define Data Tables (One table per sensor due to CR200X field limit) ---
' Note: CR200X dataloggers have a limit of 16 fields per table and 8 tables total.
' DataTable names must be <= 12 characters.
DataTable(Table_S0,True,-1)
	DataInterval(0,30,Min)
	Minimum(1,BattV,False,False)
	Sample(1,id)
	Sample(1,SensorAddress0)
	Sample(1,SapFlwTot0)
	Sample(1,VhOuter0)
	Sample(1,VhInner0)
	Sample(1,AlphaOut0)
	Sample(1,AlphaIn0)
	Sample(1,BetaOut0)
	Sample(1,BetaIn0)
	Sample(1,tMaxTout0)
	Sample(1,tMaxTin0)
EndTable

DataTable(Table_S1,True,-1)
	DataInterval(0,30,Min)
	Minimum(1,BattV,False,False)
	Sample(1,id)
	Sample(1,SensorAddress1)
	Sample(1,SapFlwTot1)
	Sample(1,VhOuter1)
	Sample(1,VhInner1)
	Sample(1,AlphaOut1)
	Sample(1,AlphaIn1)
	Sample(1,BetaOut1)
	Sample(1,BetaIn1)
	Sample(1,tMaxTout1)
	Sample(1,tMaxTin1)
EndTable

DataTable(Table_S2,True,-1)
	DataInterval(0,30,Min)
	Minimum(1,BattV,False,False)
	Sample(1,id)
	Sample(1,SensorAddress2)
	Sample(1,SapFlwTot2)
	Sample(1,VhOuter2)
	Sample(1,VhInner2)
	Sample(1,AlphaOut2)
	Sample(1,AlphaIn2)
	Sample(1,BetaOut2)
	Sample(1,BetaIn2)
	Sample(1,tMaxTout2)
	Sample(1,tMaxTin2)
EndTable

DataTable(Table_S3,True,-1)
	DataInterval(0,30,Min)
	Minimum(1,BattV,False,False)
	Sample(1,id)
	Sample(1,SensorAddress3)
	Sample(1,SapFlwTot3)
	Sample(1,VhOuter3)
	Sample(1,VhInner3)
	Sample(1,AlphaOut3)
	Sample(1,AlphaIn3)
	Sample(1,BetaOut3)
	Sample(1,BetaIn3)
	Sample(1,tMaxTout3)
	Sample(1,tMaxTin3)
EndTable


'--- Main Program ---
BeginProg
	Scan(30,Min)
		'Default CR200 Series Datalogger Battery Voltage measurement 'BattV'
		Battery(BattV)
		'User Entered Calculation (from example)
		id = Status.PakBusAddress(1,1)
		SensorAddress0 = 0
		SensorAddress1 = 1
		SensorAddress2 = 2
		SensorAddress3 = 3

		' --- Collect standard data for Sensor 0 (Address "0") ---
		SDI12Recorder(SDIData_Sensor0(), "0M!", 1, 0)
		'Reset all Generic SDI-12 Sensor measurements if NAN is returned to the first element
		If SDIData_Sensor0(1) = NAN Then
			For N_0 = 1 To 9
				SDIData_Sensor0(N_0) = NAN
			Next
		EndIf

		' --- Collect standard data for Sensor 1 (Address "1") ---
		SDI12Recorder(SDIData_Sensor1(), "1M!", 1, 0)
		'Reset all Generic SDI-12 Sensor measurements if NAN is returned to the first element
		If SDIData_Sensor1(1) = NAN Then
			For N_1 = 1 To 9
				SDIData_Sensor1(N_1) = NAN
			Next
		EndIf

		' --- Collect standard data for Sensor 2 (Address "2") ---
		SDI12Recorder(SDIData_Sensor2(), "2M!", 1, 0)
		'Reset all Generic SDI-12 Sensor measurements if NAN is returned to the first element
		If SDIData_Sensor2(1) = NAN Then
			For N_2 = 1 To 9
				SDIData_Sensor2(N_2) = NAN
			Next
		EndIf

		' --- Collect standard data for Sensor 3 (Address "3") ---
		SDI12Recorder(SDIData_Sensor3(), "3M!", 1, 0)
		'Reset all Generic SDI-12 Sensor measurements if NAN is returned to the first element
		If SDIData_Sensor3(1) = NAN Then
			For N_3 = 1 To 9
				SDIData_Sensor3(N_3) = NAN
			Next
		EndIf

		'Call Data Tables and Store Data
		CallTable Table_S0
		CallTable Table_S1
		CallTable Table_S2
		CallTable Table_S3
	NextScan
EndProg